PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  expName = TEST
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine StudyTrial
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    TextComponent StudyTrialText
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $encoding_question
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    ImageComponent studyTrialImage
      image [set every repeat] = $image_filename
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent StudyTrialResp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent StudyTrialOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: yes                    right arrow: no
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  Routine TestTrial
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    ImageComponent leftImg
      image [set every repeat] = $left_image
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent rightImg
      image [set every repeat] = $right_image
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent TestResp
      allowedKeys = 'left','right'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    TextComponent TestOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow                             right arrow 
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  Routine loadFiles
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        csv_filename = f"sequence_{block_num}.csv"
        test_file = f"sequence_{block_num}_test.csv"
  Routine block_num
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
  Routine Distractor
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # Generate random numbers
        current_number = random.randint(1, 99)
      Each Frame:
        # Run for xx seconds
        if globalClock.getTime() - distractor_start_time > 10:
            continueRoutine = False
    TextComponent numberText
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $current_number
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    KeyboardComponent DistractorResp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent DistractorOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left: odd                              right: even
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  Routine distractor_start
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        distractor_start_time = globalClock.getTime()
  Routine block_counter
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
  Routine welcome
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        welcome_message = "Welcome to Block " + str(block_num) + "\n\nPress SPACE to begin."
    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $welcome_message
    KeyboardComponent welcomeResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue
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  Routine block_end
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        block_num += 1
    TextComponent blockendText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = The next block will begin shortly. Please wait. 
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  Routine Intro
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    TextComponent IntroText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will complete a series of mini-experiments called Blocks.

        Each Block will consist of 3 phases:

        (1) Learning phase
        (2) Odd/even task
        (3) Test phase



        Press SPACEBAR to continue
    KeyboardComponent IntroResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LearningQuestion
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    TextComponent LearningQuestionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        Do you have any questions about this phase of the experiment?



        Press SPACEBAR to continue
    KeyboardComponent LearningQuestionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DistractorInst
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    TextComponent DistractorInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN TASK



        You will be shown a series of numbers 1 at a time.

        Your task is to use the keyboard to indicate if you think the presented number is an ODD or EVEN number.

        You will have 2.5 seconds to make your response before the screen advances.



        Press SPACEBAR for an example
    KeyboardComponent DistractorInstResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LearningInst
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    TextComponent LearningInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        In this task, you will see a series of images presented one at a time.

        Your task will be to remember the order in which you saw the images.



        Press SPACEBAR to continue
    KeyboardComponent LearningInstResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DistractorQuestion
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    TextComponent DistractorQuestionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN PHASE


        Do you have any questions about this phase of the experiment?



        Press SPACEBAR to continue
    KeyboardComponent DistractorQuestionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine hello
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    TextComponent helleText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!





        Press SPACEBAR for instructions
    KeyboardComponent helloResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInst
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    TextComponent TestInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEST PHASE



        You will be presented with 2 images.

        Your task will be to indicate which image you remember seeing first during the learning phase.

        You will have 2.5 seconds to make your response before the screen advances.



        Press SPACEBAR for an example
    KeyboardComponent TestInstResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestExample
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    ImageComponent TestExampleLeftImage
      image = rubberduck.jpg
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent TestExampleRightImage
      image = strawberry.jpg
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent TestExampleResp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent TestExampleOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow                             right arrow 
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  Routine LearningExample1
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    ImageComponent LearningExample1Image
      image = strawberry.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent LearningEncodingQuestion1Text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Does this item have a distinctive odor?
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    TextComponent LearningEncodingOptions1Text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: yes                    right arrow: no
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    KeyboardComponent LearningEncodingExample1Resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine LearningExample2
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    ImageComponent LearningExample2Image
      image = rubberduck.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent LearningEncodingQuestion2Text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Does this item grow on trees?
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    TextComponent LearningEncodingOptions2Text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 1: yes                                       2: no 
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    KeyboardComponent LearningEncodingExample2Resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine TestQuestion
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    TextComponent TestQuestionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEST PHASE


        Do you have any questions about this phase of the experiment?



        Press SPACEBAR to continue
    KeyboardComponent TestQuestionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyReminder
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    TextComponent StudyReminderText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        LEARNING PHASE


        Your task is to:

        (1) remember the order in which you see the images

        (2) use the keyboard to answer the question about the image


        You will have 2.5 seconds to make your response before the screen advances.


        Press 1 to begin
    KeyboardComponent StudyReminderResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine LearningInst2
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    TextComponent LearningInst2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        You will also be asked to use the keyboard to answer a question related to the images. This question may be different each time.

        You will have 2.5 seconds to make your response before the screen advances.



        Press SPACEBAR to continue
    KeyboardComponent LearningInst2Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DistractorExample1
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    TextComponent DistractorExample1Number
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 3
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    TextComponent DistractorExample1OptionsText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: odd                  right arrow: even
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    KeyboardComponent DistractorExample1Resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine DistractorExample2
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    TextComponent DistractorExample2Number
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 34
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    TextComponent DistractorExample2OptionsText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: odd                  right arrow: even
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    KeyboardComponent DistractorExample2Resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine transition1
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    TextComponent transition1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please wait. The next phase will begin shortly. 
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  Routine DistractorReminder
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    TextComponent DistractorReminderText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN TASK



        Your task is to use the keyboard to indicate if the presented number is an ODD or EVEN number

        You will have 2.5 seconds to make your response before the screen advances.



        Press 1 to begin
    KeyboardComponent DistractorReminderResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transition2
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    TextComponent transition2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please wait. The next phase will begin shortly. 
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  Routine TestReminder
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    TextComponent TestReminderText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEST PHASE



        Your task will be to indicate which image you remember seeing first during the learning phase.

        You will have 2.5 seconds to make your response before the screen advances.



        Press 1 to begin
    KeyboardComponent TestReminderResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent GoodbyeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!!





        Press SPACEBAR to exit
    KeyboardComponent GoodbyeResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transition3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please wait. The next phase will begin shortly. 
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  Routine timeEstimate
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    TextComponent time_display
      color = -1.0000, -1.0000, 0.0902
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every frame] = $time_str
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        minutes = 0
        seconds = 0
        focus = 'minutes'  # 'minutes' or 'seconds'
        time_str = f"{minutes:02d}:{seconds:02d}"
      Each Frame:
        keys = event.getKeys()

        for key in keys:
            if key == 'left':
                focus = 'minutes'
            elif key == 'right':
                focus = 'seconds'
            elif key == 'up':
                if focus == 'minutes':
                    minutes = (minutes + 1) % 60
                elif focus == 'seconds':
                    seconds = (seconds + 1) % 60
            elif key == 'down':
                if focus == 'minutes':
                    minutes = (minutes - 1) % 60
                elif focus == 'seconds':
                    seconds = (seconds - 1) % 60
            elif key == 'return':
                continueRoutine = False  # finish routine

        # Update display text
        if focus == 'minutes':
            time_str = f"[{minutes:02d}]:{seconds:02d}"
        else:
            time_str = f"{minutes:02d}:[{seconds:02d}]"
      End Routine:
        thisExp.addData('estimated_minutes', minutes)
        thisExp.addData('estimated_seconds', seconds)
    KeyboardComponent key_resp
      allowedKeys = 'up','down','left','right','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent timeEstimateInstructions
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Estimate how long this block lasted for.

        Use the LEFT and RIGHT arrows to toggle between MINUTES AND SECONDS.

        Use the UP and DOWN arrows to adjust the timer.
    TextComponent TimeEstimateConfirm
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press RETURN to confirm 
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    TextComponent TimeEstimateTimerText
      letterHeight = 0.05
      pos = (0, -0.16)
      startVal [time (s)] = 0.0
      text = minutes   :   seconds
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Flow
  Routine timeEstimate
  Routine block_counter
  Routine hello
  Routine Intro
  Routine LearningInst
  Routine LearningInst2
  Routine LearningExample1
  Routine LearningExample2
  Routine LearningQuestion
  Routine DistractorInst
  Routine DistractorExample1
  Routine DistractorExample2
  Routine DistractorQuestion
  Routine TestInst
  Routine TestExample
  Routine TestQuestion
  LoopInitiator BlockLoop loopType="TrialHandler"
    conditionsFile = blocks_V1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('csv_filename', 'sequence_1.csv'), ('test_file', 'sequence_1_test.csv')]),
      OrderedDict([('block', 2), ('csv_filename', 'sequence_2.csv'), ('test_file', 'sequence_2_test.csv')]),
      OrderedDict([('block', 3), ('csv_filename', 'sequence_3.csv'), ('test_file', 'sequence_3_test.csv')]),
      OrderedDict([('block', 4), ('csv_filename', 'sequence_4.csv'), ('test_file', 'sequence_4_test.csv')]),
      OrderedDict([('block', 5), ('csv_filename', 'sequence_5.csv'), ('test_file', 'sequence_5_test.csv')]),
      OrderedDict([('block', 6), ('csv_filename', 'sequence_f.csv'), ('test_file', 'sequence_f_test.csv')]),
      OrderedDict([('block', 7), ('csv_filename', 'sequence_g.csv'), ('test_file', 'sequence_g_test.csv')]),
      OrderedDict([('block', 8), ('csv_filename', 'sequence_h.csv'), ('test_file', 'sequence_h_test.csv')]),
      OrderedDict([('block', 9), ('csv_filename', 'sequence_i.csv'), ('test_file', 'sequence_i_test.csv')]),
      OrderedDict([('block', 10), ('csv_filename', 'sequence_j.csv'), ('test_file', 'sequence_j_test.csv')])]
    Routine welcome
    Routine StudyReminder
    LoopInitiator StudyLoop loopType="TrialHandler"
      conditionsFile = $csv_filename
      loopType = sequential
      nReps = 1
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      Routine StudyTrial
    LoopTerminator StudyLoop
    Routine transition1
    Routine DistractorReminder
    Routine distractor_start
    LoopInitiator DistractorLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine Distractor
    LoopTerminator DistractorLoop
    Routine transition2
    Routine TestReminder
    LoopInitiator TestLoop loopType="TrialHandler"
      conditionsFile = $test_file
      loopType = sequential
      nReps = 1
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      Routine TestTrial
    LoopTerminator TestLoop
    Routine transition3
    Routine block_end
  LoopTerminator BlockLoop
  Routine goodbye
