PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  expName = InfoShuffle_task_seq1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine encoding
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    ImageComponent stimImage
      image [set every repeat] = $image_filename
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent encodingQuestion
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Is the object MANMADE or NATURAL?
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    TextComponent encodingOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 1: Man-made                             2: Natural
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    KeyboardComponent encoding_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine block_start
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
  Routine Welcome
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        welcome_message = "Welcome to Block " + str(block_num) + "\n\nPress SPACE to begin."

        csv_filename = f"sequence_{block_num}.csv"
        test_file = f"sequence_{block_num}_test.csv"
        #csv_filename = csv_filename
        #test_filename = test_file
      End Routine:
        #block_num += 1
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $welcome_message
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_end
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        block_num += 1
    TextComponent blockEnd_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = The next block will begin shortly. Please wait. 
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  Routine load_file
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    CodeComponent code_4
      Code Type = Auto->JS
      Begin Routine:
        #test_file = f"sequence_{block_num}_test.csv"
  Routine test
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    ImageComponent image_left
      image [set every repeat] = $left_image
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent image_right
      image [set every repeat] = $right_image
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent orderQuestion
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which did you see first?
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    TextComponent orderOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow                         right arrow
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    KeyboardComponent tempOrder_resp
      allowedKeys = 'left','right'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine testInstruc2
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    TextComponent testInstruct2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test phase



        You will use the LEFT and RIGHT arrow keys to make your response.

        If you are unsure which image you saw first, take a guess. The screen will not advance until you have made a response.



        Press SPACEBAR to continue
    KeyboardComponent testInstruct2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testInstruc1
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    TextComponent testInstruct1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test phase



        You will be presented with 2 images.

        Your task will be to indicate which image you remember seeing first during the learning phase.



        Press SPACE to continue
    KeyboardComponent testInstruct1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encodingInstruc1
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    TextComponent encodingInstruct1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        In this task, you will see a series of images presented one at a time.

        Your task will be to indicate if you think the objects in each image is MANMADE or NATURAL.



        Press SPACEBAR to continue
    KeyboardComponent encodingInstruct1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encodingInstruc2
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    TextComponent encodingInstruct2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        MANMADE objects are things created by humans such as buildings, tools, furniture...

        NATURAL objects are things that occur in nature without human intervention such as animals, rocks, plants...



        Press SPACEBAR to continue
    KeyboardComponent encodingInstruct2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encodingInstruc3
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    TextComponent encodingInstruct3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        You will use the keyboard to make your response.

        Press '1' if you think the object is MANMADE

        Press '2' if you think the object is NATURAL



        Press SPACEBAR to continue
    KeyboardComponent encodingInstruct3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encodingReady
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    TextComponent encodingReady_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        Do you have any questions?



        Press SPACEBAR to begin
    KeyboardComponent encodingReady_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testReady
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    TextComponent testReady_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test phase



        Do you have any questions?



        Press SPACEBAR when you are ready to begin
    KeyboardComponent testReady_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transition
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  Routine distractor
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # Generate random numbers
        current_number = random.randint(1, 99)
      Each Frame:
        # Run for 30 seconds
        if globalClock.getTime() - distractor_start_time > 30:
            continueRoutine = False
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_number
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    KeyboardComponent key_resp_9
      allowedKeys = 'e','o',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractor_start
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        distractor_start_time = globalClock.getTime()
  Routine distractorInstruc1
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    TextComponent distractorInstruc1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN TASK



        You will be shown a series of numbers 1 at a time.

        Your task is to indicate if you think the presented number is an ODD or EVEN number.



        Press SPACEBAR to continue
    KeyboardComponent distractorInstruc1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractorInstruc2
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    TextComponent distractorInstruc2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN TASK



        Press 'o' if you think the number is an ODD number

        Press 'e' if you think the number is an EVENT number



        Press SPACEBAR to continue
    KeyboardComponent distractorInstruc2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractorReady
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    TextComponent distractorReady_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN TASK



        Do you have any questions?



        Press SPACEBAR to begin
    KeyboardComponent distractorReady_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transition1
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    TextComponent transition1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Your next task will begin shortly. Please wait.
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  Routine transition2
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    TextComponent transition2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Your next task will bebegin shortly. Please wait. 
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  Routine Goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!!





        Press SPACEBAR to exit
    KeyboardComponent goodbye_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine block_start
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = blocks.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sequence_num', 1), ('csv_filename', 'sequence_1.csv'), ('test_file', 'sequence_1_test.csv')]),
      OrderedDict([('sequence_num', 2), ('csv_filename', 'sequence_2.csv'), ('test_file', 'sequence_2_test.csv')]),
      OrderedDict([('sequence_num', 3), ('csv_filename', 'sequence_3.csv'), ('test_file', 'sequence_3_test.csv')])]
    Routine Welcome
    Routine encodingInstruc1
    Routine encodingInstruc2
    Routine encodingInstruc3
    Routine encodingReady
    LoopInitiator encoding_loop loopType="TrialHandler"
      conditionsFile = $csv_filename
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('image_filename', 'sequence1_stimuli/cat3-5.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat4-1.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat5-4.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat1-2.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat2-5.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat4-4.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat3-3.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat2-2.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat1-3.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat5-1.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat2-4.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat5-3.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat1-5.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat3-1.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat4-5.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat5-5.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat4-3.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat1-4.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat2-1.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat3-2.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat5-2.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat4-2.jpg')]),
        OrderedDict([('image_filename', 'sequence1_stimuli/cat2-3.jpg')])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
      Routine encoding
    LoopTerminator encoding_loop
    Routine transition1
    Routine distractor_start
    Routine distractorInstruc1
    Routine distractorInstruc2
    Routine distractorReady
    LoopInitiator distractor_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine distractor
    LoopTerminator distractor_loop
    Routine transition2
    Routine testInstruc1
    Routine testInstruc2
    Routine testReady
    LoopInitiator test_loop loopType="TrialHandler"
      conditionsFile = $test_file
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('left_image', 'sequence1_stimuli/cat2-5.jpg'), ('right_image', 'sequence1_stimuli/cat4-4.jpg'), ('left_original_position', 5), ('right_original_position', 6), ('correct_answer', 'left')]),
        OrderedDict([('left_image', 'sequence1_stimuli/cat5-1.jpg'), ('right_image', 'sequence1_stimuli/cat2-4.jpg'), ('left_original_position', 10), ('right_original_position', 11), ('correct_answer', 'left')]),
        OrderedDict([('left_image', 'sequence1_stimuli/cat5-5.jpg'), ('right_image', 'sequence1_stimuli/cat4-5.jpg'), ('left_original_position', 16), ('right_original_position', 15), ('correct_answer', 'right')]),
        OrderedDict([('left_image', 'sequence1_stimuli/cat5-2.jpg'), ('right_image', 'sequence1_stimuli/cat3-2.jpg'), ('left_original_position', 21), ('right_original_position', 20), ('correct_answer', 'right')])]
      Routine test
    LoopTerminator test_loop
    Routine block_end
  LoopTerminator block_loop
  Routine Goodbye
