PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TEST
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine StudyTrial
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    ImageComponent studyImage
      image [set every repeat] = $image_filename
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrial
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    ImageComponent leftImg
      image [set every repeat] = $left_image
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent rightImg
      image [set every repeat] = $right_image
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loadFiles
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        csv_filename = f"sequence_{block_num}.csv"
        test_file = f"sequence_{block_num}_test.csv"
  Routine block_num
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
  Routine block_end
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        block_num += 1
  Routine Distractor
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # Generate random numbers
        current_number = random.randint(1, 99)
      Each Frame:
        # Run for xx seconds
        if globalClock.getTime() - distractor_start_time > 10:
            continueRoutine = False
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    TextComponent numberText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_number
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractor_start
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        distractor_start_time = globalClock.getTime()
Flow
  LoopInitiator BlockLoop loopType="TrialHandler"
    conditionsFile = blocks_V1_blockrandom.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sequence_num', 1), ('csv_filename', 'sequence_1.csv'), ('test_file', 'sequence_1_test.csv')]),
      OrderedDict([('sequence_num', 2), ('csv_filename', 'sequence_2.csv'), ('test_file', 'sequence_2_test.csv')]),
      OrderedDict([('sequence_num', 3), ('csv_filename', 'sequence_3.csv'), ('test_file', 'sequence_3_test.csv')]),
      OrderedDict([('sequence_num', 4), ('csv_filename', 'sequence_4.csv'), ('test_file', 'sequence_4_test.csv')])]
    LoopInitiator StudyLoop loopType="TrialHandler"
      conditionsFile = $csv_filename
      loopType = sequential
      nReps = 1
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      Routine StudyTrial
    LoopTerminator StudyLoop
    Routine distractor_start
    LoopInitiator DistractorLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine Distractor
    LoopTerminator DistractorLoop
    LoopInitiator TestLoop loopType="TrialHandler"
      conditionsFile = $test_file
      loopType = sequential
      nReps = 1
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      Routine TestTrial
    LoopTerminator TestLoop
  LoopTerminator BlockLoop
